<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Cuttlefish;assembly=AllenNeuralDynamics.Cuttlefish"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="PropertySource" TypeArguments="p1:AppendModalitySuffix,sys:Nullable(p1:Modality)">
              <MemberName>Modality</MemberName>
              <Value>Fib</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Modality</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraSettingsPath</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SourcePath" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="SubjectName" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Modality</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Modality" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:AppendModalitySuffix">
                <p1:Modality>Behavior</p1:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/camera_settings.xml</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DestinationPath" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FileCopy">
                <p1:Overwrite>false</p1:Overwrite>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CuttlefishEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Modality</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Modality" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:GetDeviceMetadata" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DeviceMetadata" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
              <DeviceMetadata />
              <Modality>Behavior</Modality>
              <DeviceName>Cuttlefish</DeviceName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameStreams</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHsfpFrameStream.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Modality</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Modality" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:AppendModalitySuffix">
                <p1:Modality>Fib</p1:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/teensy_events.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="13" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="14" To="19" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="30" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>