<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.HamamatsuCamera;assembly=AllenNeuralDynamics.HamamatsuCamera"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.HamamatsuCamera.Nodes;assembly=AllenNeuralDynamics.HamamatsuCamera"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Subject" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai">
              <RootFolder>C:/output_data</RootFolder>
              <Subject>Init</Subject>
              <DateTimeOffset>0001-01-01T00:00:00.0000000+00:00</DateTimeOffset>
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ChannelCount</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LookupTablePath" />
              <Property Name="SettingsPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:C13440">
                <p1:Regions>
                  <p1:RegionOfInterest>
                    <p1:X>28</p1:X>
                    <p1:Y>841</p1:Y>
                    <p1:Width>1976</p1:Width>
                    <p1:Height>236</p1:Height>
                  </p1:RegionOfInterest>
                </p1:Regions>
                <p1:CropMode>Auto</p1:CropMode>
                <p1:EnableBundling>false</p1:EnableBundling>
                <p1:BundleSize>1</p1:BundleSize>
                <p1:SettingsPath>C:\local-HSFP\20260112_C13440Config_V4-beta_extTrig.xml</p1:SettingsPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Frames" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameCounter</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt64">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>FrameStreams</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>IsTeensyReady</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Teensy</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>Teensy</port:Name>
                <port:PortName>COM7</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>true</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>Teensy</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>s</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsTeensyReady</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>SendToTeensy</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>Teensy</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>q</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>c</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsTeensyReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
        <rx:Name>EndExperiment</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SendToTeensy</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="PropertySource" TypeArguments="p4:AppendModalitySuffix,sys:Nullable(p4:Modality)">
              <MemberName>Modality</MemberName>
              <Value>Fib</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Modality</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameStreams</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHsfpFrameStream.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Visualizers</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Frames</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Image</Selector>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="RegionOfInterest" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:Crop">
                  <cv:RegionOfInterest>
                    <cv:X>852</cv:X>
                    <cv:Y>57</cv:Y>
                    <cv:Width>86</cv:Width>
                    <cv:Height>138</cv:Height>
                  </cv:RegionOfInterest>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>CroppedImage</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Average" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Val0</Selector>
              </Expression>
              <Expression xsi:type="zg:RollingGraphBuilder">
                <zg:SymbolType>None</zg:SymbolType>
                <zg:LineWidth>1</zg:LineWidth>
                <zg:CurveSettings />
                <zg:Capacity>1000</zg:Capacity>
                <zg:Min xsi:nil="true" />
                <zg:Max xsi:nil="true" />
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="SubscribeSubject">
                <Name>Frames</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Image</Selector>
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="SubscribeSubject">
                <Name>CroppedImage</Name>
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:ColumnCount>2</gui:ColumnCount>
                <gui:RowCount>1</gui:RowCount>
                <gui:ColumnStyles />
                <gui:RowStyles />
                <gui:CellSpans />
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:PropertyGridBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:HelpVisible>true</gui:HelpVisible>
                <gui:ToolbarVisible>true</gui:ToolbarVisible>
                <gui:AutoRefresh>false</gui:AutoRefresh>
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="SubscribeSubject">
                <Name>TeensyEvents</Name>
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="SubscribeSubject">
                <Name>IsTeensyReady</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Enabled" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="gui:ButtonBuilder">
                <gui:Name>Start</gui:Name>
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:Text>Start</gui:Text>
              </Expression>
              <Expression xsi:type="rx:Sink">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Unit" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>StartExperiment</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="SubscribeSubject">
                <Name>IsTeensyReady</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Enabled" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="gui:ButtonBuilder">
                <gui:Name>End</gui:Name>
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:Text>End</gui:Text>
              </Expression>
              <Expression xsi:type="rx:Sink">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Unit" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>EndExperiment</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:ColumnCount>2</gui:ColumnCount>
                <gui:RowCount>1</gui:RowCount>
                <gui:ColumnStyles />
                <gui:RowStyles />
                <gui:CellSpans />
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:ColumnCount>1</gui:ColumnCount>
                <gui:RowCount>2</gui:RowCount>
                <gui:ColumnStyles />
                <gui:RowStyles />
                <gui:CellSpans />
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:ColumnCount>2</gui:ColumnCount>
                <gui:RowCount>1</gui:RowCount>
                <gui:ColumnStyles />
                <gui:RowStyles />
                <gui:CellSpans />
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:ColumnCount>1</gui:ColumnCount>
                <gui:RowCount>2</gui:RowCount>
                <gui:ColumnStyles />
                <gui:RowStyles />
                <gui:CellSpans />
              </Expression>
              <Expression xsi:type="VisualizerMapping" />
              <Expression xsi:type="gui:TableLayoutPanelBuilder">
                <gui:Enabled>true</gui:Enabled>
                <gui:Visible>true</gui:Visible>
                <gui:ColumnCount>1</gui:ColumnCount>
                <gui:RowCount>2</gui:RowCount>
                <gui:ColumnStyles />
                <gui:RowStyles>
                  <gui:RowStyle>
                    <gui:SizeType>Percent</gui:SizeType>
                    <gui:Height>0.25</gui:Height>
                  </gui:RowStyle>
                  <gui:RowStyle>
                    <gui:SizeType>Percent</gui:SizeType>
                    <gui:Height>0.75</gui:Height>
                  </gui:RowStyle>
                </gui:RowStyles>
                <gui:CellSpans />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="38" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="14" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source2" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="15" To="36" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
              <Edge From="17" To="34" Label="Source1" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="32" Label="Source1" />
              <Edge From="20" To="21" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="23" Label="Source1" />
              <Edge From="23" To="24" Label="Source1" />
              <Edge From="24" To="30" Label="Source1" />
              <Edge From="25" To="26" Label="Source1" />
              <Edge From="26" To="27" Label="Source1" />
              <Edge From="27" To="28" Label="Source1" />
              <Edge From="28" To="29" Label="Source1" />
              <Edge From="29" To="30" Label="Source2" />
              <Edge From="30" To="31" Label="Source1" />
              <Edge From="31" To="32" Label="Source2" />
              <Edge From="32" To="33" Label="Source1" />
              <Edge From="33" To="34" Label="Source2" />
              <Edge From="34" To="35" Label="Source1" />
              <Edge From="35" To="36" Label="Source2" />
              <Edge From="36" To="37" Label="Source1" />
              <Edge From="37" To="38" Label="Source2" />
              <Edge From="38" To="39" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ui:VisualizerWindow">
          <ui:Visible>true</ui:Visible>
          <ui:Location xsi:nil="true" />
          <ui:Size xsi:nil="true" />
          <ui:WindowState xsi:nil="true" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>